WorkflowBuilder(Version=2.3.0)
StringProperty
-> BehaviorSubject TargetLanguage

Bonsai.Vision.SolidColor(Size(Width=100, Height=100), Depth=U8, Channels=3, Color(Val0=0, Val1=0, Val2=0, Val3=0))
-> BehaviorSubject StimulusFrames

Bonsai.Vision.SolidColor(Size(Width=100, Height=100), Depth=U8, Channels=3, Color(Val0=0, Val1=0, Val2=0, Val3=0))
-> BehaviorSubject FeedbackFrames

Bonsai.Arduino.DigitalInput(PortName=COM3, Pin=9)
-> DistinctUntilChanged => #30
-> Condition High => #35
    WorkflowInput Source1
    -> WorkflowOutput
#30 -> Condition Low
    WorkflowInput Source1
    -> BitwiseNot
    -> WorkflowOutput
-> StringProperty(Value=English) => #21
Bonsai.Arduino.DigitalInput(PortName=COM3, Pin=10)
-> DistinctUntilChanged => #31
-> Condition High => #36
    WorkflowInput Source1
    -> WorkflowOutput
#31 -> Condition Low
    WorkflowInput Source1
    -> BitwiseNot
    -> WorkflowOutput
-> StringProperty(Value=German) => #13
Bonsai.Arduino.DigitalInput(PortName=COM3, Pin=11)
-> DistinctUntilChanged => #32
-> Condition High => #37
    WorkflowInput Source1
    -> WorkflowOutput
#32 -> Condition Low
    WorkflowInput Source1
    -> BitwiseNot
    -> WorkflowOutput
-> StringProperty(Value=Italian) => #12
Bonsai.Arduino.DigitalInput(PortName=COM3, Pin=12)
-> DistinctUntilChanged => #33
-> Condition High => #38
    WorkflowInput Source1
    -> WorkflowOutput
#33 -> Condition Low
    WorkflowInput Source1
    -> BitwiseNot
    -> WorkflowOutput
-> StringProperty(Value=Chinese) => #9
Bonsai.Arduino.DigitalInput(PortName=COM3, Pin=8)
-> DistinctUntilChanged => #29
-> Condition High => #34
    WorkflowInput Source1
    -> WorkflowOutput
#34, #35, #36, #37, #38 -> Merge
-> PublishSubject LanguageUp
-> Unit => #53
#29 -> Condition Low
    WorkflowInput Source1
    -> BitwiseNot
    -> WorkflowOutput
-> StringProperty(Value=French) => #17
#17, #21, #13, #12, #9 -> Merge
-> PublishSubject LanguageDown
-> Unit => #52
#52, #53 -> Merge
-> DelaySubscription(DueTime=PT5S)
-> RetryCount(Count=5)

SubscribeSubject StimulusFrames
-> Bonsai.Shaders.UpdateTexture(TextureName=Video, InternalFormat=Rgba)

SubscribeSubject FeedbackFrames
-> SurpriseIntelligence.ShowImage(WindowState=Fullscreen, Device=Second)

Bonsai.Shaders.RenderFrame => #16
-> Bonsai.Shaders.DrawMesh(ShaderName=Video, MeshName=Quad)
#16 -> Take(Count=1)
-> MemberSelector(Selector=Source.Sender)
-> Bonsai.Scripting.PythonTransform
  Script:
    @returns(bool)
    def process(value):
      value.CursorVisible = False
      return True

Bonsai.Shaders.Input.KeyDown
-> MemberSelector(Selector=Source.EventArgs.Key)
-> Equal(Operand=WorkflowPropertyOfKey(Value=Escape))
-> Take(Count=1)
-> WorkflowOutput

Timer(DueTime=PT0S, Period=PT0S)
-> SelectMany SelectLanguage
    WorkflowInput Source1
    -> SelectMany RestingState
        SubscribeSubject LanguageDown
        -> Take(Count=1)
        -> WorkflowOutput

        SubscribeSubject TaskFrames => #5
        Bonsai.Shaders.RenderFrame => #7
        #5, #7 -> Zip
        -> MemberSelector(Selector=Source.Item1)
        -> MulticastSubject FeedbackFrames
        -> Repeat

        Bonsai.Vision.LoadImage(FileName=Videos\RestingState-InnerMonitor.jpg, Mode=Unchanged)
        -> MulticastSubject StimulusFrames
    -> MulticastSubject TargetLanguage
    -> SelectMany CenterEye
        WorkflowInput Source1
        -> Bonsai.Scripting.ExpressionTransform
          Expression: String.Format("Videos/CenterEye-{0}.avi",it)
        -> ExternalizedPropertyOfStringFileCapture FileName(MemberName=FileName, Value=Videos\RestingState.avi)
        -> Bonsai.Vision.FileCapture(FileName=Videos/CenterEye-English.avi, PlaybackRate=0, StartPosition=0, PositionUnits=Frames, Loop=true, Playing=true)
        -> Take(Count=1) => #29
        -> Bonsai.Vision.Grayscale
        -> Bonsai.Vision.Threshold(ThresholdValue=128, MaxValue=255, ThresholdType=Binary) => #9
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=10000, MaxArea=nil) => #10
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Bonsai.Vision.LargestBinaryRegion
        -> Bonsai.Scripting.PythonTransform
          Script:
            import clr
            clr.AddReference("OpenCV.Net")
            from OpenCV.Net import *
            from System import Array

            @returns(Array[Point2f])
            def process(value):
              rect = value.Contour.Rect
              pt1 = Point2f(rect.X,rect.Y)
              pt2 = Point2f(rect.X+rect.Width,rect.Y)
              pt3 = Point2f(rect.X+rect.Width,rect.Y+rect.Height)
              pt4 = Point2f(rect.X,rect.Y+rect.Height)
              return Array[Point2f]([pt2,pt3,pt4,pt1])
        -> ExternalizedPropertyOfArrayOfPoint2fWarpPerspective Destination(MemberName=Destination) => #19
        #10 -> Bonsai.Vision.DrawContours(MaxLevel=1, Thickness=-1)
        -> Bonsai.Vision.ConvertColor(Conversion=Gray2Bgr) => #14
        #29, #14 -> Zip
        -> Subtract => #13
        #9 -> MemberSelector(Selector=Source.Size)
        -> ExternalizedPropertyOfSizeResizeCanvas Size(MemberName=Size, Value(Width=0, Height=0)) => #36
        Bonsai.Video.VideoCaptureDevice(Index=1, Format(FrameSize(Width=800, Height=600), AverageFrameRate=60, MaximumFrameRate=60, BitCount=24))
        -> Bonsai.Vision.Flip(Mode=Both) => #44
        SubscribeSubject End => #38
        Bonsai.Video.VideoCaptureDevice(Index=2, Format(FrameSize(Width=800, Height=600), AverageFrameRate=60, MaximumFrameRate=60, BitCount=24)) => #40
        #44, #40 -> CombineLatest => #41
        #41, #40 -> Sample
        -> Bonsai.Dsp.Concat(Axis=1) => #43
        #43, #36 -> Bonsai.Vision.Resize(Size(Width=720, Height=480), Interpolation=Linear) => #17
        #17, #19 -> Bonsai.Vision.WarpPerspective => #20
          Source(Point2f(X=0, Y=0), Point2f(X=0, Y=480), Point2f(X=720, Y=480), Point2f(X=720, Y=0))
          Destination(Point2f(X=537, Y=109), Point2f(X=537, Y=338), Point2f(X=184, Y=338), Point2f(X=184, Y=109))
          Flags=Linear
          FillValue(Val0=0, Val1=0, Val2=0, Val3=0)
        #20, #13 -> CombineLatest
        -> Add
        -> MulticastSubject StimulusFrames
        -> MulticastSubject FeedbackFrames => #3
        #3, #38 -> TakeUntil

        SubscribeSubject LanguageDown => #1
        Timer(DueTime=PT20S, Period=PT0S)
        -> StringProperty(Value=Timeout) => #24
        SubscribeSubject TargetLanguage => #28
        #1, #28 -> CombineLatest => #35
        -> Condition SameLanguage
            WorkflowInput Source1
            -> Equal
            -> WorkflowOutput
        -> SelectMany Hold => #34
            WorkflowInput Source1
            -> Bonsai.Scripting.ExpressionTransform => #8
              Expression: Item1
            SubscribeSubject LanguageUp
            -> Take(Count=1)
            -> IgnoreElements
            -> Unit => #12
            ExternalizedTimeSpanOfTimer DueTime(MemberName=DueTime, Value=PT3S)
            -> Timer(DueTime=PT3S, Period=PT0S)
            -> Unit => #11
            #11, #12 -> Amb => #4
            #4, #8 -> Zip
            -> MemberSelector(Selector=Source.Item2)
            -> WorkflowOutput
        #35 -> Condition DifferentLanguage
            WorkflowInput Source1
            -> NotEqual
            -> WorkflowOutput
        -> StringProperty(Value=Timeout) => #33
        #34, #33, #24 -> Merge
        -> Take(Count=1)
        -> PublishSubject End
        -> WorkflowOutput
    -> Condition ValidChoice
        WorkflowInput Source1
        -> NotEqual(Operand=StringProperty(Value=Timeout))
        -> WorkflowOutput
    -> Repeat
    -> Take(Count=1)
    -> WorkflowOutput

    Bonsai.Vision.FileCapture(FileName=Videos\RestingState.avi, PlaybackRate=10000, StartPosition=0, PositionUnits=Frames, Loop=false, Playing=true)
    -> SelectMany TwoFramesForOne
        WorkflowInput Source1 => #0
        Range(Start=0, Count=2) => #2
        #0, #2 -> CombineLatest
        -> MemberSelector(Selector=Source.Item1)
        -> WorkflowOutput
    -> ReplaySubject TaskFrames(BufferSize=nil)
-> Sink ExperimentOn
    WorkflowInput Source1
    -> Bonsai.Vision.LoadImage(FileName=Videos\ExperimentOn.png, Mode=Unchanged)
    -> MulticastSubject FeedbackFrames
    -> WorkflowOutput
-> SelectMany Task
    SubscribeSubject FeedbackPath => #3
    Bonsai.Video.VideoCaptureDevice(Index=0, Format(FrameSize(Width=160, Height=120), AverageFrameRate=30, MaximumFrameRate=30, BitCount=24))
    -> DelaySubscription(DueTime=PT1S)
    -> PublishSubject WorldStart
    -> NestedWorkflow WorldTriggeredPlayback => #2
        SubscribeSubject FolderName
        -> Add(Operand=StringProperty(Value=world.avi))
        -> ExternalizedPropertyOfStringVideoWriter(MemberName=FileName, Value=world.avi) => #0
        SubscribeSubject FolderName
        -> Add(Operand=StringProperty(Value=world.csv))
        -> ExternalizedPropertyOfStringCsvWriter(MemberName=FileName, Value="") => #2
        SubscribeSubject TaskFrames => #14
        WorkflowInput Source1
        -> Timestamp => #13
        #13, #2 -> Bonsai.IO.CsvWriter
          FileName=../../Data/2017-10-13_12-54-15/2017-10-13_12-54-15_stimuli025_world.csv
          Append=false
          Overwrite=false
          Suffix=None
          IncludeHeader=false
          Selector=Source.Timestamp
        -> MemberSelector(Selector=Source.Value) => #11
        #11, #0 -> Bonsai.Vision.VideoWriter => #10
          FileName=../../Data/2017-10-13_12-54-15/2017-10-13_12-54-15_stimuli025_world.avi
          Suffix=None
          Buffered=true
          Overwrite=false
          FourCC=FMP4
          FrameRate=30
          FrameSize(Width=0, Height=0)
          ResizeInterpolation=NearestNeighbor
        #14, #10 -> Zip
        -> MemberSelector(Selector=Source.Item1)
        -> Bonsai.Shaders.UpdateTexture(TextureName=Video, InternalFormat=Rgba)
        -> Last
        -> WorkflowOutput
    #2, #3 -> Zip
    -> MemberSelector(Selector=Source.Item2)
    -> WorkflowOutput

    Bonsai.IO.GetFiles(Path=Videos, SearchPattern=stimuli*.avi, SearchOption=TopDirectoryOnly)
    -> Bonsai.Scripting.PythonTransform
      Script:
        from System import Random

        generator = Random()

        @returns(str)
        def process(value):
          index = generator.Next(0,len(value))
          return value[index]
    -> ReplaySubject StimulusPath(BufferSize=1)
    -> Timestamp
    -> Bonsai.Scripting.ExpressionTransform
      Expression:
        "../../Data/"+
        it.Timestamp.ToString("yyyy-MM-dd_HH-mm-ss")+"/"+
        it.Timestamp.ToString("yyyy-MM-dd_HH-mm-ss")+"_"+
        it.Value.Substring(it.Value.IndexOf("\")+1,
        it.Value.LastIndexOf(".")-it.Value.IndexOf("\")-1)+"_"
    -> ReplaySubject FolderName(BufferSize=nil)

    SubscribeSubject FolderName
    -> Add(Operand=StringProperty(Value=lefteye.avi))
    -> ReplaySubject FeedbackPath(BufferSize=1)

    NestedWorkflow SelectTask
        Bonsai.Vision.FileCapture(FileName=Videos/Calibration.avi, PlaybackRate=10000, StartPosition=0, PositionUnits=Frames, Loop=false, Playing=true) => #2
        SubscribeSubject StimulusPath
        -> ExternalizedPropertyOfStringFileCapture(MemberName=FileName, Value=Videos\pupil_hidef.avi)
        -> Bonsai.Vision.FileCapture(FileName=Videos\stimuli025.avi, PlaybackRate=10000, StartPosition=0, PositionUnits=Frames, Loop=false, Playing=true) => #3
        SubscribeSubject TargetLanguage
        -> Bonsai.Scripting.ExpressionTransform
          Expression: String.Format("Videos/DoNotMove-{0}.avi",it)
        -> ExternalizedPropertyOfStringFileCapture(MemberName=FileName, Value=Videos\RestingState.avi)
        -> Bonsai.Vision.FileCapture(FileName=Videos/DoNotMove-English.avi, PlaybackRate=10000, StartPosition=0, PositionUnits=Frames, Loop=false, Playing=true) => #1
        SubscribeSubject TargetLanguage
        -> Bonsai.Scripting.ExpressionTransform
          Expression: String.Format("Videos/Thanks-{0}.avi",it)
        -> ExternalizedPropertyOfStringFileCapture(MemberName=FileName, Value=Videos\RestingState.avi)
        -> Bonsai.Vision.FileCapture(FileName=Videos/Thanks-English.avi, PlaybackRate=10000, StartPosition=0, PositionUnits=Frames, Loop=false, Playing=true) => #4
        #1, #2, #3, #4 -> Concat
        -> WorkflowOutput
    -> ReplaySubject TaskFrames(BufferSize=nil)

    NestedWorkflow LeftEye
        SubscribeSubject FolderName
        -> Add(Operand=StringProperty(Value=lefteye.avi))
        -> ExternalizedPropertyOfStringVideoWriter(MemberName=FileName, Value=lefteye.avi) => #2
        Bonsai.Video.VideoCaptureDevice(Index=1, Format(FrameSize(Width=800, Height=600), AverageFrameRate=60, MaximumFrameRate=60, BitCount=24)) => #10
        SubscribeSubject WorldStart => #11
        #10, #11 -> SkipUntil
        -> Timestamp => #5
        SubscribeSubject FolderName
        -> Add(Operand=StringProperty(Value=lefteye.csv))
        -> ExternalizedPropertyOfStringCsvWriter(MemberName=FileName, Value=lefteye.csv) => #6
        #5, #6 -> Bonsai.IO.CsvWriter
          FileName=../../Data/2017-10-13_12-54-15/2017-10-13_12-54-15_stimuli025_lefteye.csv
          Append=false
          Overwrite=false
          Suffix=None
          IncludeHeader=false
          Selector=Source.Timestamp
        -> MemberSelector(Selector=Source.Value) => #1
        #1, #2 -> Bonsai.Vision.VideoWriter
          FileName=../../Data/2017-10-13_12-54-15/2017-10-13_12-54-15_stimuli025_lefteye.avi
          Suffix=None
          Buffered=true
          Overwrite=false
          FourCC=FMP4
          FrameRate=60
          FrameSize(Width=0, Height=0)
          ResizeInterpolation=NearestNeighbor
        -> WorkflowOutput

    NestedWorkflow RightEye
        SubscribeSubject FolderName
        -> Add(Operand=StringProperty(Value=righteye.avi))
        -> ExternalizedPropertyOfStringVideoWriter(MemberName=FileName, Value=righteye.avi) => #2
        Bonsai.Video.VideoCaptureDevice(Index=2, Format(FrameSize(Width=800, Height=600), AverageFrameRate=60, MaximumFrameRate=60, BitCount=24)) => #10
        SubscribeSubject WorldStart => #11
        #10, #11 -> SkipUntil
        -> Timestamp => #5
        SubscribeSubject FolderName
        -> Add(Operand=StringProperty(Value=righteye.csv))
        -> ExternalizedPropertyOfStringCsvWriter(MemberName=FileName, Value=righteye.csv) => #6
        #5, #6 -> Bonsai.IO.CsvWriter
          FileName=../../Data/2017-10-13_12-54-15/2017-10-13_12-54-15_stimuli025_righteye.csv
          Append=false
          Overwrite=false
          Suffix=None
          IncludeHeader=false
          Selector=Source.Timestamp
        -> MemberSelector(Selector=Source.Value) => #1
        #1, #2 -> Bonsai.Vision.VideoWriter
          FileName=../../Data/2017-10-13_12-54-15/2017-10-13_12-54-15_stimuli025_righteye.avi
          Suffix=None
          Buffered=true
          Overwrite=false
          FourCC=FMP4
          FrameRate=60
          FrameSize(Width=0, Height=0)
          ResizeInterpolation=NearestNeighbor
        -> WorkflowOutput
-> SelectMany Feedback
    WorkflowInput Source1
    -> ExternalizedPropertyOfStringFileCapture(MemberName=FileName)
    -> Bonsai.Vision.FileCapture
      FileName=../../Data/2017-10-13_12-54-15/2017-10-13_12-54-15_stimuli025_lefteye.avi
      PlaybackRate=60
      StartPosition=0
      PositionUnits=Frames
      Loop=false
      Playing=true
    -> Bonsai.Vision.Flip(Mode=Both)
    -> DelaySubscription(DueTime=PT2S) => #4
    Bonsai.Vision.SolidColor(Size(Width=800, Height=600), Depth=U8, Channels=3, Color(Val0=0, Val1=0, Val2=0, Val3=0)) => #8
    #4, #8 -> Concat => #9
    #9, #8 -> OnErrorResumeNext
    -> MulticastSubject FeedbackFrames
    -> WorkflowOutput

    SubscribeSubject TargetLanguage
    -> Bonsai.Scripting.ExpressionTransform
      Expression: String.Format("Videos/Replay-{0}.avi",it)
    -> ExternalizedPropertyOfStringFileCapture(MemberName=FileName, Value=Videos\RestingState.avi)
    -> Bonsai.Vision.FileCapture(FileName=Videos/Replay-English.avi, PlaybackRate=0, StartPosition=0, PositionUnits=Frames, Loop=true, Playing=true)
    -> MulticastSubject StimulusFrames
-> Repeat
